PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = 1210
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent img_shirt
      image [set every repeat] = $shirtpath
      pos [set every repeat] = $shirtpos
      size = (0.1, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent img_pants
      image [set every repeat] = $pantspath
      pos [set every repeat] = $pantspos
      size = (0.1, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent img_acc
      image [set every repeat] = $accpath
      pos [set every repeat] = $accpos
      size = (0.1, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent img_cart
      image [set every repeat] = $cartpath
      pos [set every repeat] = $cartpos
      size = (0.1, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = $CRESP
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine target1
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = gothic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $target
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  Routine intro
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      font = Nanum Gothic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        실험에 참가해주셔서 감사합니다.

        아이콘 위치와 종류에 따른 탐색속도 차이를 알아보는 실험입니다.

        가능한 빠르게 찾아주세요.
  Routine end
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      font = Nanum Gothic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 실험이 종료되었습니다.
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  Routine break_2
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      font = Nanum Gothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        쉬는시간입니다.

        스페이스바를 누르면 바로 시작됩니다.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro2
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      font = Nanum Gothic
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        화면에 나타나는 타겟을 찾아주세요.

        스페이스바를 누르면 시작합니다.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine intro2
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 4
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    LoopInitiator loop loopType="TrialHandler"
      conditionsFile = codi.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Target': 'img_shirt', 'icontype': 'icon', 'target': '티셔츠', 'bar_dir': 'V', 'CRESP': 'img_shirt', 'shirtpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\shirts_icon.png', 'shirtpos': (-0.3, 0.3), 'pantspath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\pants_icon.png', 'pantspos': (-0.1, 0.3), 'accpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\acc_icon.png', 'accpos': (0.1, 0.3), 'cartpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\cart_icon.png', 'cartpos': (0.3, 0.3)},
        {'Target': 'img_shirt', 'icontype': 'icon', 'target': '티셔츠', 'bar_dir': 'V', 'CRESP': 'img_shirt', 'shirtpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\shirts_icon.png', 'shirtpos': (-0.1, 0.3), 'pantspath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\pants_icon.png', 'pantspos': (0.1, 0.3), 'accpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\acc_icon.png', 'accpos': (0.3, 0.3), 'cartpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\cart_icon.png', 'cartpos': (-0.3, 0.3)},
        {'Target': 'img_shirt', 'icontype': 'icon', 'target': '티셔츠', 'bar_dir': 'V', 'CRESP': 'img_shirt', 'shirtpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\shirts_icon.png', 'shirtpos': (0.1, 0.3), 'pantspath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\pants_icon.png', 'pantspos': (0.3, 0.3), 'accpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\acc_icon.png', 'accpos': (-0.3, 0.3), 'cartpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\cart_icon.png', 'cartpos': (-0.1, 0.3)},
        {'Target': 'img_shirt', 'icontype': 'icon', 'target': '티셔츠', 'bar_dir': 'V', 'CRESP': 'img_shirt', 'shirtpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\shirts_icon.png', 'shirtpos': (0.3, 0.3), 'pantspath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\pants_icon.png', 'pantspos': (-0.3, 0.3), 'accpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\acc_icon.png', 'accpos': (-0.1, 0.3), 'cartpath': 'C:\\Users\\hyeon\\Documents\\psychopy_tlftmq\\icon\\cart_icon.png', 'cartpos': (0.1, 0.3)}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
      Routine target1
      Routine trial
    LoopTerminator loop
    Routine break_2
  LoopTerminator block
  LoopInitiator loop2 loopType="TrialHandler"
    conditionsFile = codi.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine target1
    Routine trial
  LoopTerminator loop2
  Routine end
