PsychoPy2experiment version="2024.1.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['이름'],expInfo['학번'], expName, expInfo['date'])
  Experiment info = {'이름': '', '학번': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = vttp
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
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Routines
  Routine count_code
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        rountin_1 = 0
        rountin_2 = 0
        rountin_3 = 0
        rountin_4 = 0

        if expInfo["session"] == 'a':
            rountin_1 = 1
        if expInfo["session"] == 'b':
            rountin_2 = 1
        if expInfo["session"] == 'c':
            rountin_3 = 1
        if expInfo["session"] == 'd':
            rountin_4 = 1
  Routine start1
    RoutineSettingsComponent start1
      saveStartStop = False
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = Malgun Gothic
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      wrapWidth = 1.7
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      text:
        2024학년도 1학기 [심리학 연구의 기초 기술] 수업의 일환으로,

        영상 시간이 시간지각에 미치는 영향을 알아보기 위한 실험입니다.

        총 15분 정도 소요될 예정입니다.
  Routine start2
    RoutineSettingsComponent start2
      saveStartStop = False
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      font = Malgun Gothic
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      wrapWidth = 1.7
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      text:
        실험에 시작하기 앞서 소리를 꼭 들어야합니다.

        소리를 킬 수 있는 환경이면 음소거를 풀고,

        소리를 듣기 어려운 환경이면 이어폰을 사용해주세요.
  Routine start3
    RoutineSettingsComponent start3
      saveStartStop = False
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    TextComponent text_7
      color = -1.0000, -1.0000, -1.0000
      font = Malgun Gothic
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      wrapWidth = 1.7
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      text:
        몇가지 영상을 보여드리겠습니다.

        여러분들은 영상을 시청한 후, 시간이 얼마나 흐른 것 같은지 초 단위로 입해주시면 됩니다.

        예) 10분 -> 600초
  Routine start_exp
    RoutineSettingsComponent start_exp
      saveStartStop = False
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      font = Malgun Gothic
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 스페이스바를 누르면 실험이 시작됩니다.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine a
    RoutineSettingsComponent a
      color = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      useWindowParams = True
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    MovieComponent movie_15
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $path
      saveStartStop = False
      size = (0.6,1)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent session_a_go
      Code Type = Auto->JS
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      Begin Routine:
        if counterbalance.group == 'a':
            continueRoutine = True
        else:
            continueRoutine = False
  Routine b
    RoutineSettingsComponent b
      color = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      useWindowParams = True
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    MovieComponent movie_30
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $path
      saveStartStop = False
      size = (0.6,1)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent session_b_go
      Code Type = Auto->JS
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      Begin Routine:
        if counterbalance.group == 'b':
            continueRoutine = True
        else:
            continueRoutine = False
  Routine c
    RoutineSettingsComponent c
      color = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      useWindowParams = True
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    MovieComponent movie_60
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $path
      saveStartStop = False
      size = (0.6,1)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent session_c_go
      Code Type = Auto->JS
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      Begin Routine:
        if counterbalance.group == 'c':
            continueRoutine = True
        else:
            continueRoutine = False
  Routine d
    RoutineSettingsComponent d
      color = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      useWindowParams = True
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    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = True
      movie = video/3분 10번.mp4
      saveStartStop = False
      size = (1.8,1)
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent session_d_go
      Code Type = Auto->JS
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      Begin Routine:
        if counterbalance.group == 'd':
            continueRoutine = True
        else:
            continueRoutine = False
  Routine response
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      font = Malgun Gothic
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        영상을 시청한 후, 시간이 얼마나 흐른 것 같나요?

        초 단위로 작성해주세요.

        예) 10분 -> 600초

        엔터를 누르면 실험이 종료됩니다.
    TextboxComponent textbox
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 1.0000, 1.0000, 1.0000
      font = Malgun Gothic
      letterHeight = 0.04
      placeholder = 여기에 입력해주세요
      pos = (0, -0.1)
      size = (0.7, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      font = Malgun Gothic
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 실험이 종료되었습니다.
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  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = True
    nGroups = 4
    nReps = 1
    nSlots = 30
    saveData = True
    saveRemaining = True
    specMode = uniform
Flow
  CounterbalanceRoutine counterbalance
  Routine start1
  Routine start2
  Routine start3
  Routine start_exp
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condi/condi1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cond': 151.0, 'path': 'video/15초 1번.mp4'},
      {'cond': 152.0, 'path': 'video/15초 3번.mp4'},
      {'cond': 153.0, 'path': 'video/15초 4번.mp4'},
      {'cond': 154.0, 'path': 'video/15초 6번.mp4'},
      {'cond': 155.0, 'path': 'video/15초 7번.mp4'},
      {'cond': 156.0, 'path': 'video/15초 8번.mp4'},
      {'cond': 157.0, 'path': 'video/15초 9번.mp4'},
      {'cond': 158.0, 'path': 'video/15초 11번.mp4'},
      {'cond': 159.0, 'path': 'video/15초 12번.mp4'},
      {'cond': 1510.0, 'path': 'video/15초 13번.mp4'},
      {'cond': 1511.0, 'path': 'video/15초 14번.mp4'},
      {'cond': 1512.0, 'path': 'video/15초 15번.mp4'}]
    Routine a
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = condi/condi2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cond': 301.0, 'path': 'video/30초 1번.mp4'},
      {'cond': 302.0, 'path': 'video/30초 3번.mp4'},
      {'cond': 303.0, 'path': 'video/30초 5번.mp4'},
      {'cond': 304.0, 'path': 'video/30초 7번.mp4'},
      {'cond': 305.0, 'path': 'video/30초 10번.mp4'},
      {'cond': 306.0, 'path': 'video/30초 14번.mp4'}]
    Routine b
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = condi/condi3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cond': 601.0, 'path': 'video/60초 5번.mp4'},
      {'cond': 602.0, 'path': 'video/60초 6번.mp4'},
      {'cond': 603.0, 'path': 'video/60초 12번.mp4'}]
    Routine c
  LoopTerminator trials_3
  Routine d
  Routine response
  Routine end
